PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'email': '', 'session': '', 'date': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = MRT experiment
  logging level = debug
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Routines
  Routine Hello
    TextComponent title
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to the Mental Rotation Task.
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    KeyboardComponent respintro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spac
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
  Routine VisualInstrux1
    TextComponent headerx
      font = Times New Roman
      letterHeight = 0.06
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        These two objects are the same but are rotated.
        In this example, you will press “x”.
    ImageComponent Image1
      image = recodingtask_1/en15.jpg
      pos = (-0.3, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent Image2
      image = recodingtask_1/en17.jpg
      pos = (0.3, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spac3
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press “x” to continue.
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  Routine VisualInstrux2
    TextComponent headerm
      font = Times New Roman
      letterHeight = 0.06
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        These two objects are mirror images of each other. They can never be rotated to appear exactly alike.
        In this example, you will press “m”.
    ImageComponent Image3
      image = recodingtask_1/ep17.jpg
      pos = (-0.3, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent Image4
      image = recodingtask_1/en17.jpg
      pos = (0.3, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_4
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spac4
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press “m” to continue.
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  Routine Start
    TextComponent text3
      font = Times New Roman
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        You are now ready to start the experiment.

        Remember to do this task as quickly and accurately as you can.

        Do you have any questions? If so, please ask them to your experimenter promptly. If not, let the experimenter know that you are ready.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_5
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar when you are ready to start the experiment.
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  Routine Instrux
    TextComponent Intro
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be asked to evaluate drawings of two objects. Sometimes they will be the same figure but rotated. Sometimes they will be mirror images of each other. Your job is to press “x” when the figures are the SAME and “m” when the figures are DIFFERENT.

        Please do this as quickly and as accurately as you can.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spac2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press spacebar to see an example.
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  Routine Practice
    TextComponent practice
      font = Times New Roman
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Let’s do some practice.

        Press “x” if the two objects are the same.
        Press “m” if the two objects are mirror images (ie. the images cannot be superimposed on each other).
    KeyboardComponent Practiceresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spac5
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press spacebar to start.
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  Routine Goodbye
    TextComponent Final
      font = Times New Roman
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the MRT task.

        Thank you for your participation!
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_6
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to exit the current MRT task. 
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  Routine fixation
    TextComponent fixa
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine Feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if key_resp.corr == 1:
            msg = "Congratulations!"
        else:
            msg = "Oops! That was incorrect."
    TextComponent show
      color = Beige
      font = Times New Roman
      letterHeight = 0.07
      opacity = 2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_7
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $corrAnsText
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    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_8
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press the spacebar to continue.
    TextComponent answered
      color = black
      font = Times New Roman
      letterHeight = 0.05
      pos = (-0.05, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = You answered:
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    TextComponent answer
      color = Black
      font = Times New Roman
      letterHeight = 0.05
      pos = (0.15, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_resp.keys
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  Routine StimDisplay
    ImageComponent image_3
      image [set every repeat] = $ImageFile1
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_4
      image [set every repeat] = $ImageFile2
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'x','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine StimDisplay1
    ImageComponent image
      image [set every repeat] = $ImageFile1
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_2
      image [set every repeat] = $ImageFile2
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'x','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
Flow
  Routine Hello
  Routine Instrux
  Routine VisualInstrux1
  Routine VisualInstrux2
  Routine Practice
  LoopInitiator PracticeList loopType="TrialHandler"
    conditionsFile = Sample_Task_MRT.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile1', 'recodingtask_1/en3.jpg'), ('ImageFile2', 'recodingtask_1/en15.jpg'), ('corrAns', 'x'), ('corrAnsText', "The correct answer was 'x'")]),
      OrderedDict([('ImageFile1', 'recodingtask_1/ep17.jpg'), ('ImageFile2', 'recodingtask_1/en5.jpg'), ('corrAns', 'm'), ('corrAnsText', "The correct answer was 'm'")]),
      OrderedDict([('ImageFile1', 'recodingtask_1/ep5.jpg'), ('ImageFile2', 'recodingtask_1/ep6.jpg'), ('corrAns', 'x'), ('corrAnsText', "The correct answer was 'x'")]),
      OrderedDict([('ImageFile1', 'recodingtask_1/ep3.jpg'), ('ImageFile2', 'recodingtask_1/en3.jpg'), ('corrAns', 'm'), ('corrAnsText', "The correct answer was 'm'")])]
    Routine fixation
    Routine StimDisplay
    Routine Feedback
  LoopTerminator PracticeList
  Routine Start
  LoopInitiator TrialList1 loopType="TrialHandler"
    conditionsFile = Images_and_Correct_Answers_Part_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile1', 'recodingtask_1/an11.jpg'), ('ImageFile2', 'recodingtask_1/an11.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/ap17.jpg'), ('ImageFile2', 'recodingtask_1/ap1.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/an2.jpg'), ('ImageFile2', 'recodingtask_1/an6.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/an13.jpg'), ('ImageFile2', 'recodingtask_1/an1.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/an2.jpg'), ('ImageFile2', 'recodingtask_1/an10.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/bp8.jpg'), ('ImageFile2', 'recodingtask_1/bp8.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/bn14.jpg'), ('ImageFile2', 'recodingtask_1/bn12.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/bn1.jpg'), ('ImageFile2', 'recodingtask_1/bn15.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/bn8.jpg'), ('ImageFile2', 'recodingtask_1/bn14.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/bn14.jpg'), ('ImageFile2', 'recodingtask_1/bn6.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/cn15.jpg'), ('ImageFile2', 'recodingtask_1/cn15.jpg'), ('corrAns', 'x')]),
      OrderedDict([('ImageFile1', 'recodingtask_1/cn15.jpg'), ('ImageFile2', 'recodingtask_1/cn17.jpg'), ('corrAns', 'x')])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
    Routine fixation
    Routine StimDisplay1
  LoopTerminator TrialList1
  Routine Goodbye
